# Generated by Configurator on Mon Feb 16 09:56:21 CET 2026

# Reset
Property,Core,Initialize,0

# Devices
Device,PVCAM,PVCAM,Camera-1
Device,iSIM Waveforms,iSIMWaveforms,iSIM Waveforms
Device,iSIM Illumination Selector,iSIMWaveforms,iSIM Illumination Selector

# Pre-init settings for devices
Property,iSIM Waveforms,AO Device,Dev1
Property,iSIM Waveforms,AOTF Blanking Channel,Dev1/ao2
Property,iSIM Waveforms,AOTF Blanking Channel Max Voltage,10.0000
Property,iSIM Waveforms,AOTF Blanking Channel Min Voltage,0.0000
Property,iSIM Waveforms,AOTF MOD IN Channel 1,Dev1/ao3
Property,iSIM Waveforms,AOTF MOD IN Channel 1 Max Voltage,10.0000
Property,iSIM Waveforms,AOTF MOD IN Channel 1 Min Voltage,0.0000
Property,iSIM Waveforms,AOTF MOD IN Channel 2,Dev1/ao4
Property,iSIM Waveforms,AOTF MOD IN Channel 2 Max Voltage,10.0000
Property,iSIM Waveforms,AOTF MOD IN Channel 2 Min Voltage,0.0000
Property,iSIM Waveforms,AOTF MOD IN Channel 3,None
Property,iSIM Waveforms,AOTF MOD IN Channel 3 Max Voltage,10.0000
Property,iSIM Waveforms,AOTF MOD IN Channel 3 Min Voltage,-10.0000
Property,iSIM Waveforms,AOTF MOD IN Channel 4,None
Property,iSIM Waveforms,AOTF MOD IN Channel 4 Max Voltage,10.0000
Property,iSIM Waveforms,AOTF MOD IN Channel 4 Min Voltage,-10.0000
Property,iSIM Waveforms,Camera Trigger Channel,Dev1/ao1
Property,iSIM Waveforms,Camera Trigger Channel Max Voltage,5.0000
Property,iSIM Waveforms,Camera Trigger Channel Min Voltage,0.0000
Property,iSIM Waveforms,Clock Source,/Dev1/Ctr1InternalOutput
Property,iSIM Waveforms,Counter Channel,Dev1/ctr1
Property,iSIM Waveforms,Galvo Waveform Channel,Dev1/ao0
Property,iSIM Waveforms,Galvo Waveform Channel Max Voltage,5.0000
Property,iSIM Waveforms,Galvo Waveform Channel Min Voltage,-5.0000
Property,iSIM Waveforms,Physical Camera Readout Time Property Name,Timing-ReadoutTimeNs
Property,iSIM Waveforms,Readout Time Conversion Factor to ms, 1e-6

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,PVCAM,Exposure,50
Property,PVCAM,TriggerMode,Edge Trigger
Property,iSIM Waveforms,Physical Camera,PVCAM
Property,Core,Camera,iSIM Waveforms
Property,Core,AutoShutter,1
Property,iSIM Waveforms,AOTF Blanking (V),10
Property,iSIM Waveforms,AOTF MOD IN 1 Enabled,Yes
Property,iSIM Waveforms,AOTF MOD IN 1 (V),10

# Camera-synchronized devices

# Labels
# iSIM Illumination Selector
Label,iSIM Illumination Selector,1,AOTF MOD IN Channel 2
Label,iSIM Illumination Selector,0,AOTF MOD IN Channel 1

# Configuration presets
# Group: Channel
# Preset: 561 nm
ConfigGroup,Channel,561 nm,iSIM Illumination Selector,State,1

# Preset: 488 nm
ConfigGroup,Channel,488 nm,iSIM Illumination Selector,State,0



# PixelSize settings

