# Generated by Configurator on Mon Mar 02 09:59:31 CET 2026

# Reset
Property,Core,Initialize,0

# Devices
Device,COM9,SerialManager,COM9
Device,COM6,SerialManager,COM6
Device,COM7,SerialManager,COM7
Device,Prime BSI,PVCAM,Camera-1
Device,iSIM Waveforms,iSIMWaveforms,iSIM Waveforms
Device,iSIM Illumination Selector,iSIMWaveforms,iSIM Illumination Selector
Device,Laser: 488 nm,Sapphire,Sapphire
Device,Laser: 561 nm,LaserQuantumLaser,Laser
Device,MicroDrive XY Stage,MCL_MicroDrive,MicroDrive XY Stage
Device,MCL NanoDrive Z Stage,MCL_NanoDrive,MCL NanoDrive Z Stage
Device,SutterHub,SutterLambda2,SutterHub
Device,Wheel-A,SutterLambda2,Wheel-A

# Pre-init settings for devices
Property,COM9,AnswerTimeout,500.0000
Property,COM9,BaudRate,128000
Property,COM9,DTR,Disable
Property,COM9,DataBits,8
Property,COM9,DelayBetweenCharsMs,0.0000
Property,COM9,Fast USB to Serial,Disable
Property,COM9,Handshaking,Off
Property,COM9,Parity,None
Property,COM9,StopBits,1
Property,COM9,Verbose,0
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,9600
Property,COM6,DTR,Disable
Property,COM6,DataBits,8
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Fast USB to Serial,Disable
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,0
Property,COM7,AnswerTimeout,500.0000
Property,COM7,BaudRate,19200
Property,COM7,DTR,Disable
Property,COM7,DataBits,8
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Fast USB to Serial,Disable
Property,COM7,Handshaking,Off
Property,COM7,Parity,None
Property,COM7,StopBits,1
Property,COM7,Verbose,0
Property,iSIM Waveforms,AO Device,Dev1
Property,iSIM Waveforms,AOTF Blanking Channel,Dev1/ao2
Property,iSIM Waveforms,AOTF Blanking Channel Max Voltage,10.0000
Property,iSIM Waveforms,AOTF Blanking Channel Min Voltage,0.0000
Property,iSIM Waveforms,AOTF MOD IN Channel 1,Dev1/ao3
Property,iSIM Waveforms,AOTF MOD IN Channel 1 Max Voltage,10.0000
Property,iSIM Waveforms,AOTF MOD IN Channel 1 Min Voltage,0.0000
Property,iSIM Waveforms,AOTF MOD IN Channel 2,Dev1/ao4
Property,iSIM Waveforms,AOTF MOD IN Channel 2 Max Voltage,10.0000
Property,iSIM Waveforms,AOTF MOD IN Channel 2 Min Voltage,0.0000
Property,iSIM Waveforms,AOTF MOD IN Channel 3,Dev1/ao5
Property,iSIM Waveforms,AOTF MOD IN Channel 3 Max Voltage,5.0000
Property,iSIM Waveforms,AOTF MOD IN Channel 3 Min Voltage,0.0000
Property,iSIM Waveforms,AOTF MOD IN Channel 4,None
Property,iSIM Waveforms,AOTF MOD IN Channel 4 Max Voltage,10.0000
Property,iSIM Waveforms,AOTF MOD IN Channel 4 Min Voltage,-10.0000
Property,iSIM Waveforms,Camera Trigger Channel,Dev1/ao1
Property,iSIM Waveforms,Camera Trigger Channel Max Voltage,5.0000
Property,iSIM Waveforms,Camera Trigger Channel Min Voltage,0.0000
Property,iSIM Waveforms,Clock Source,/Dev1/Ctr1InternalOutput
Property,iSIM Waveforms,Counter Channel,Dev1/ctr1
Property,iSIM Waveforms,Galvo Waveform Channel,Dev1/ao0
Property,iSIM Waveforms,Galvo Waveform Channel Max Voltage,5.0000
Property,iSIM Waveforms,Galvo Waveform Channel Min Voltage,-5.0000
Property,iSIM Waveforms,Physical Camera Readout Time Property Name,Timing-ReadoutTimeNs
Property,iSIM Waveforms,Readout Time Conversion Factor to ms, 1e-6
Property,Laser: 488 nm,Port,COM7
Property,Laser: 561 nm,Maximum power (mW),500.0000
Property,Laser: 561 nm,Port,COM6
Property,MicroDrive XY Stage,EncodersPresent,No
Property,SutterHub,Port,COM9

# Pre-init settings for COM ports

# Hub (parent) references
Parent,Wheel-A,SutterHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,MCL NanoDrive Z Stage,0

# Roles
Property,Prime BSI,Exposure,50
Property,Prime BSI,TriggerMode,Edge Trigger
Property,iSIM Waveforms,Physical Camera,Prime BSI
Property,iSIM Waveforms,AOTF Blanking (V),10
Property,iSIM Waveforms,AOTF MOD IN 1 Enabled,Yes
Property,iSIM Waveforms,AOTF MOD IN 1 (V),10
Property,Core,Camera,iSIM Waveforms
Property,Core,Focus,MCL NanoDrive Z Stage
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# iSIM Illumination Selector
Label,iSIM Illumination Selector,2,AOTF MOD IN Channel 3
Label,iSIM Illumination Selector,1,AOTF MOD IN Channel 2
Label,iSIM Illumination Selector,0,AOTF MOD IN Channel 1
# Wheel-A
Label,Wheel-A,9,Filter-9
Label,Wheel-A,8,Filter-8
Label,Wheel-A,7,Filter-7
Label,Wheel-A,6,Filter-6
Label,Wheel-A,5,Filter-5
Label,Wheel-A,4,Filter-4
Label,Wheel-A,3,Filter-3
Label,Wheel-A,2,Red
Label,Wheel-A,1,Green
Label,Wheel-A,0,Light Block

# Configuration presets
# Group: Channel
# Preset: 561 nm
ConfigGroup,Channel,561 nm,iSIM Illumination Selector,State,1

# Preset: 488 nm
ConfigGroup,Channel,488 nm,iSIM Illumination Selector,State,0


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Wheel-A,State,1
ConfigGroup,System,Startup,Wheel-A,State Change Speed,1



# PixelSize settings

