# Generated by Configurator on Fri Jan 27 16:09:05 CET 2023

# Reset
Property,Core,Initialize,0

# Devices
Device,COM9,SerialManager,COM9
Device,COM1,SerialManager,COM1
Device,COM6,SerialManager,COM6
Device,COM7,SerialManager,COM7
Device,COM3,SerialManager,COM3
Device,PrimeB_Camera,PVCAM,Camera-1
Device,Wheel-A,SutterLambda,Wheel-A
Device,Quantum_561nm,LaserQuantumLaser,Laser
Device,PseudoChannel,DemoCamera,DHub
Device,DPseudoChannel,DemoCamera,DLightPath
Device,Lightpath,DemoCamera,DHub
Device,DLightPath,DemoCamera,DLightPath
Device,488_AOTF,AAAOTF,AAAOTF
Device,561_AOTF,AAAOTF,AAAOTF
Device,Sapphire,Sapphire,Sapphire
Device,MicroDrive XY Stage,MCL_MicroDrive,MicroDrive XY Stage
Device,MCL NanoDrive Z Stage,MCL_NanoDrive,MCL NanoDrive Z Stage
Device,EDA,DemoCamera,DStateDevice

# Pre-init settings for devices
Property,COM9,AnswerTimeout,0
Property,COM9,BaudRate,128000
Property,COM9,DTR,Disable
Property,COM9,DataBits,8
Property,COM9,DelayBetweenCharsMs,0.0000
Property,COM9,Fast USB to Serial,Disable
Property,COM9,Handshaking,Off
Property,COM9,Parity,None
Property,COM9,StopBits,1
Property,COM9,Verbose,1
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,9600
Property,COM1,DTR,Disable
Property,COM1,DataBits,8
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Fast USB to Serial,Disable
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,9600
Property,COM6,DTR,Disable
Property,COM6,DataBits,8
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Fast USB to Serial,Disable
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1
Property,COM7,AnswerTimeout,500.0000
Property,COM7,BaudRate,19200
Property,COM7,DTR,Disable
Property,COM7,DataBits,8
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Fast USB to Serial,Disable
Property,COM7,Handshaking,Off
Property,COM7,Parity,None
Property,COM7,StopBits,1
Property,COM7,Verbose,1
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,128000
Property,COM3,DTR,Disable
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,Wheel-A,Port,COM9
Property,Wheel-A,Timeout(ms),500
Property,Quantum_561nm,Maximum power (mW),500.0000
Property,Quantum_561nm,Port,COM6
Property,488_AOTF,Port,COM1
Property,561_AOTF,Port,COM1
Property,Sapphire,Port,COM7
Property,MicroDrive XY Stage,EncodersPresent,No
Property,EDA,Number of positions,2

# Pre-init settings for COM ports

# Hub (parent) references
Parent,DPseudoChannel,PseudoChannel
Parent,DLightPath,Lightpath
Parent,EDA,Lightpath

# Initialize
Property,Core,Initialize,1

# Delays
Delay,Sapphire,10.0

# Focus directions
FocusDirection,MCL NanoDrive Z Stage,0

# Roles
Property,Core,Camera,PrimeB_Camera
Property,Core,Shutter,Sapphire
Property,Core,Focus,MCL NanoDrive Z Stage
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# Wheel-A
Label,Wheel-A,9,Filter-9
Label,Wheel-A,8,Filter-8
Label,Wheel-A,7,Filter-7
Label,Wheel-A,6,Filter-6
Label,Wheel-A,5,Filter-5
Label,Wheel-A,4,Filter-4
Label,Wheel-A,3,#NoFilter
Label,Wheel-A,2,561
Label,Wheel-A,1,488
Label,Wheel-A,0,Blank
# DPseudoChannel
Label,DPseudoChannel,2,LED
Label,DPseudoChannel,1,561
Label,DPseudoChannel,0,488
# DLightPath
Label,DLightPath,2,State-2
Label,DLightPath,1,iSIM
Label,DLightPath,0,Brightfield
# EDA
Label,EDA,1,On
Label,EDA,0,Off

# Configuration presets
# Group: PrimeB BitDepth
# Preset: 200MHz 11bit
ConfigGroup,PrimeB BitDepth,200MHz 11bit,PrimeB_Camera,ReadoutRate,200MHz 11bit

# Preset: 100MHz 16bit
ConfigGroup,PrimeB BitDepth,100MHz 16bit,PrimeB_Camera,ReadoutRate,100MHz 16bit


# Group: Emission filter
# Preset: 561
ConfigGroup,Emission filter,561,Wheel-A,Label,561

# Preset: 488
ConfigGroup,Emission filter,488,Wheel-A,Label,488

# Preset: Blank
ConfigGroup,Emission filter,Blank,Wheel-A,Label,Blank

# Preset: #NoFilter
ConfigGroup,Emission filter,#NoFilter,Wheel-A,Label,#NoFilter


# Group: Channel
# Preset: 561
ConfigGroup,Channel,561,DPseudoChannel,Label,561

# Preset: 488
ConfigGroup,Channel,488,DPseudoChannel,Label,488

# Preset: LED
ConfigGroup,Channel,LED,DPseudoChannel,Label,LED


# Group: System
# Preset: Filter-9
ConfigGroup,System,Filter-9,Wheel-A,Label,Filter-9

# Preset: Filter-8
ConfigGroup,System,Filter-8,Wheel-A,Label,Filter-8

# Preset: Filter-7
ConfigGroup,System,Filter-7,Wheel-A,Label,Filter-7

# Preset: Filter-6
ConfigGroup,System,Filter-6,Wheel-A,Label,Filter-6

# Preset: Filter-5
ConfigGroup,System,Filter-5,Wheel-A,Label,Filter-5

# Preset: Startup
ConfigGroup,System,Startup,Wheel-A,Label,#NoFilter

# Preset: Filter-4
ConfigGroup,System,Filter-4,Wheel-A,Label,Filter-4


# Group: EDA
# Preset: On
ConfigGroup,EDA,On,EDA,Label,On

# Preset: Off
ConfigGroup,EDA,Off,EDA,Label,Off


# Group: 561 AOTF Power
# Preset: NewPreset
ConfigGroup,561 AOTF Power,NewPreset,561_AOTF,Power (% of max),100.0000


# Group: 561
# Preset: On
ConfigGroup,561,On,Quantum_561nm,Laser Operation,On
ConfigGroup,561,On,Quantum_561nm,Power (mW),29.8000

# Preset: Off
ConfigGroup,561,Off,Quantum_561nm,Laser Operation,Off
ConfigGroup,561,Off,Quantum_561nm,Power (mW),0.0000


# Group: PrimeB TriggerMode
# Preset: Edge Trigger
ConfigGroup,PrimeB TriggerMode,Edge Trigger,PrimeB_Camera,TriggerMode,Edge Trigger

# Preset: Internal Trigger
ConfigGroup,PrimeB TriggerMode,Internal Trigger,PrimeB_Camera,TriggerMode,Internal Trigger

# Preset: Trigger first
ConfigGroup,PrimeB TriggerMode,Trigger first,PrimeB_Camera,TriggerMode,Trigger first


# Group: Lightpath
# Preset: iSIM
ConfigGroup,Lightpath,iSIM,PrimeB_Camera,TriggerMode,Edge Trigger
ConfigGroup,Lightpath,iSIM,DPseudoChannel,Label,488
ConfigGroup,Lightpath,iSIM,DLightPath,Label,iSIM

# Preset: Brightfield
ConfigGroup,Lightpath,Brightfield,PrimeB_Camera,TriggerMode,Edge Trigger
ConfigGroup,Lightpath,Brightfield,DPseudoChannel,Label,LED
ConfigGroup,Lightpath,Brightfield,DLightPath,Label,Brightfield


# Group: 488 AOTF Power
# Preset: NewPreset
ConfigGroup,488 AOTF Power,NewPreset,488_AOTF,Power (% of max),100.0000



# PixelSize settings
# Resolution preset: Res0
ConfigPixelSize,Res0,Core,Camera,PrimeB_Camera
PixelSize_um,Res0,0.056
PixelSizeAffine,Res0,1.0,0.0,0.0,0.0,1.0,0.0

